PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [2048, 1152]
  color = $[1,1,1]
  expName = grapheme_phoneme_mapping
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Routines
  Routine instructions
    TextComponent text_instructions
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        In this task, you will learn ancient runes.

        You will see a rune on the screen. Click on the speaker icon to hear how it is pronounced. Repeat after the speaker its pronunciation. You can listen to the sounds an unlimited number of times by clicking on the speaker icon. Try to remember the new rune and its pronunciation as best as you can.

        You will practice all the runes 5 times.

        Let the experimenter know if you have any questions or press SPACE when you are ready to learn.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent textz_end
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Thank you!

        Let the experimenter know that you are done.
  Routine blank
    TextComponent blank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine end_of_block
    TextComponent text
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
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      text:
        You may take a break now

        Press SPACE to continue when you are ready
    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prompt_vowels
    TextComponent text_prompt_vowels
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Let's learn vowels!

        Important! Some runes may represent different vowel sounds.

        Press SPACE to continue when you are ready.
    KeyboardComponent key_resp_prompt_vowels
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prompt_consonants
    TextComponent text_prompt_consonants
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Let's learn consonants now!

        Important! All consonant sounds can be spelled with two different runes!

        Press SPACE to continue when you are ready
    KeyboardComponent key_resp_prompt_consonants
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_practice
    ImageComponent image_rune_left
      image [set every repeat] = $pic1
      interpolate = nearest
      pos = (-8, 0)
      size = (8, 8)
      startVal [time (s)] = 0
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    ImageComponent image_rune_right
      image [set every repeat] = $pic2
      interpolate = nearest
      pos = (8, 0)
      size = (8, 8)
      startVal [time (s)] = 0.0
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    ImageComponent image_rune_mid
      image [set every repeat] = $pic3
      interpolate = nearest
      size = (8, 8)
      startVal [time (s)] = 0.0
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    ImageComponent image_speaker_left
      image [set every repeat] = $image_icon1
      pos = (-8, -8)
      size = (2, 2)
      startVal [time (s)] = 0.7
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    ImageComponent image_speaker_right
      image [set every repeat] = $image_icon2
      pos = (8, -8)
      size = (2, 2)
      startVal [time (s)] = 0.7
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    ImageComponent image_speaker_mid
      image [set every repeat] = $image_icon3
      pos = (0, -8)
      size = (2, 2)
      startVal [time (s)] = 0.7
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    KeyboardComponent key_resp_next_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_practice
      color = red
      letterHeight = 0.6
      pos = (0, 10)
      startVal [time (s)] = 0.7
      wrapWidth = 1500
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      text:
        Click on the speaker item to listen for the pronunciation of the rune as many times as you need.
        Press SPACE to move onto the next rune.
    MouseComponent mouse
      clickable = image_speaker_left, image_speaker_right, image_speaker_mid
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.7
      timeRelativeTo = routine
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    SoundComponent phoneme_practice1
      hamming = False
      sound [set every repeat] = $sound1
      startVal [condition] = $mouse.isPressedIn==TRUE
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    SoundComponent phoneme_practice2
      hamming = False
      sound [set every repeat] = $sound2
      startVal [condition] = $mouse.isPressedIn==TRUE
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if mouse.isPressedIn(image_speaker_mid):
            phoneme_practice1 = sound.Sound('A', secs=-1, stereo=True, hamming=False,
            name='phoneme_practice1')
            phoneme_practice1.setVolume(1)
            phoneme_practice1.play
        elif mouse.isPressedIn(image_speaker_left):
            phoneme_practice1 = sound.Sound('A', secs=-1, stereo=True, hamming=False,
            name='phoneme_practice1')
            phoneme_practice1.setVolume(1)
            phoneme_practice1.play
        elif mouse.isPressedIn(image_speaker_right):
            phoneme_practice2 = sound.Sound('A', secs=-1, stereo=True, hamming=False,
            name='phoneme_practice2')
            phoneme_practice2.setVolume(1)
            phoneme_practice2.play
  Routine trial_intro
    ImageComponent image_rune_left1
      image [set every repeat] = $pic1
      interpolate = nearest
      pos = (-8, 0)
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [condition] = $sound_phoneme.status==FINISHED
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    ImageComponent image_rune_right1
      image [set every repeat] = $pic2
      interpolate = nearest
      pos = (8, 0)
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [condition] = $sound_phoneme.status==FINISHED
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    ImageComponent image_rune_mid1
      image [set every repeat] = $pic3
      interpolate = nearest
      size = (8, 8)
      startVal [time (s)] = 0.5
      stopVal [condition] = $sound_phoneme.status==FINISHED
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    SoundComponent sound_phoneme
      hamming = False
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.5
      syncScreenRefresh = False
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    TextComponent text_listen
      color = red
      letterHeight = 0.6
      pos = (0, 10)
      startVal [time (s)] = 0
      stopVal [condition] = $sound_phoneme.status==FINISHED
      text = Listen!
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  Routine practice_vowel
    TextComponent text_practice_vowel
      color = black
      letterHeight = 0.7
      startVal [condition] = $sound_phoneme.status==FINISHED
      stopVal [duration (s)] = 0.5
      text = Let's practice!
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine prompt_vowels
    LoopInitiator trials_vowels loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = trial_conditions_v4.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v3.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/ih.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v4.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/eh.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v1.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/ae.WAV'), ('sound2', 'sound/ay.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v2.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/iy.WAV'), ('sound2', 'sound/ey.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/c1a.png'), ('pic2', 'pics/c1b.png'), ('pic3', 'pics/blank.jpg'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')])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
      Routine blank
      Routine trial_intro
      Routine trial_practice
      Routine blank
    LoopTerminator trials_vowels
    Routine prompt_consonants
    LoopInitiator trials_consonants loopType="TrialHandler"
      Selected rows = 4:14
      conditionsFile = trial_conditions_v4.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v3.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/ih.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v4.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/eh.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v1.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/ae.WAV'), ('sound2', 'sound/ay.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/blank.jpg'), ('pic2', 'pics/blank.jpg'), ('pic3', 'pics/v2.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/iy.WAV'), ('sound2', 'sound/ey.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pic1', 'pics/c1a.png'), ('pic2', 'pics/c1b.png'), ('pic3', 'pics/blank.jpg'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')])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
      Routine blank
      Routine trial_intro
      Routine trial_practice
      Routine blank
    LoopTerminator trials_consonants
    Routine end_of_block
  LoopTerminator block
  Routine end
