PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [2048, 1152]
  color = $[1,1,1]
  expName = grapheme_phoneme_mapping
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Routines
  Routine trial
    ImageComponent image_rune
      image [set every repeat] = $pics
      size = (10, 10)
      startVal [time (s)] = 0.0
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    ImageComponent image_icon1
      image [set every repeat] = $pics
      pos = (-6, -8)
      size = (2, 2)
      startVal [time (s)] = 0
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    ImageComponent image_icon2
      image [set every repeat] = $pics
      pos = (6, -8)
      size = (2, 2)
      startVal [time (s)] = 0
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    ImageComponent image_icon3
      image [set every repeat] = $pics
      pos = (0, -8)
      size = (2, 2)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_play_sound1
      clickable = image_icon1, image_icon2, image_icon3
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    MouseComponent mouse_play_sound2
      clickable = image_icon2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0
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    SoundComponent sound_1
      hamming = False
      sound [set every repeat] = $sound
      startVal [condition] = $mouse_play_sound1.isPressedIn(image_icon1)
      syncScreenRefresh = False
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    SoundComponent sound_2
      hamming = False
      sound [set every repeat] = $sound
      startVal [condition] = $mouse_play_sound2.status==FINISHED
      syncScreenRefresh = False
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    KeyboardComponent key_resp_next_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text_instructions
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        In this task, you will learn ancient runes.

        You will see a rune on the screen and hear how it should be pronounced. Repeat after the speaker how the rune should be pronounced.

        You can listen to the sounds an unlimited number of time by clicking on the speaker icon on the screen.
        Press SPACEBAR when you are ready to learn a new rune.

        Important! Some runes can be pronounced in two different ways. Likewise, some sounds may correspond to two different runes.
        Be attentive.

        You will practice all the runes 5 times.

        Let the experimenter know if you have any questions or when you are done
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent textz_end
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Thank you!

        Let the experimenter know that you are done.
Flow
  Routine instructions
  LoopInitiator trials_loop1 loopType="TrialHandler"
    conditionsFile = trial_conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('pics', 'pics/c1a.png'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c1b.png'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c2a.png'), ('sound1', 'sound/d.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c2b.png'), ('sound1', 'sound/d.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c3a.png'), ('sound1', 'sound/k.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c3b.png'), ('sound1', 'sound/k.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c4a.png'), ('sound1', 'sound/l.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c4b.png'), ('sound1', 'sound/l.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c5a.png'), ('sound1', 'sound/m.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c5b.png'), ('sound1', 'sound/m.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c6a.png'), ('sound1', 'sound/n.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
      OrderedDict([('pics', 'pics/c6b.png'), ('sound1', 'sound/n.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')])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
    Routine trial
  LoopTerminator trials_loop1
  Routine end
