PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [2048, 1152]
  color = $[1,1,1]
  expName = grapheme_phoneme_mapping
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Routines
  Routine trial
    ImageComponent image_rune
      image [set every repeat] = $pics
      size = (10, 10)
      startVal [time (s)] = 0.0
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    ImageComponent image_speaker_left
      image [set every repeat] = $image_icon1
      pos = (-6, -8)
      size = (2, 2)
      startVal [time (s)] = 0
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    ImageComponent image_speaker_right
      image [set every repeat] = $image_icon2
      pos = (6, -8)
      size = (2, 2)
      startVal [time (s)] = 0
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    ImageComponent image_speaker_mid
      image [set every repeat] = $image_icon3
      pos = (0, -8)
      size = (2, 2)
      startVal [time (s)] = 0.0
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    SoundComponent sound_phoneme1
      hamming = False
      sound [set every repeat] = $sound1
      startVal [time (s)] = 0
      syncScreenRefresh = False
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    KeyboardComponent key_resp_next_trial
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text_instructions
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        In this task, you will learn ancient runes.

        You will see a rune on the screen. Click on the speaker icon to hear how it is pronounced. Repeat after the speaker its pronunciation. You can listen to the sounds an unlimited number of times by clicking on the speaker icon. Try to remember the new rune and its pronunciation as best as you can.

        You will practice all the runes 5 times.

        Let the experimenter know if you have any questions or press SPACE when you are ready to learn.
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent textz_end
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 30
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      text:
        Thank you!

        Let the experimenter know that you are done.
  Routine blank
    TextComponent blank500
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine end_of_block
    TextComponent text
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
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      text:
        You may take a brak now

        Press SPACE to continue when you are ready
    KeyboardComponent key_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prompt_vowels
    TextComponent text_prompt_vowels
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Let's learn vowels!

        Important! Some runes may represent different vowel sounds.

        Press SPACE to continue when you are ready.
    KeyboardComponent key_resp_prompt_vowels
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prompt_consonants
    TextComponent text_prompt_consonants
      color = black
      letterHeight = 0.7
      startVal [time (s)] = 0.0
      wrapWidth = 1500
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      text:
        Let's learn consonants now!

        Important! All consonant sounds can be spelled with two different runes!

        Press SPACE to continue when you are ready
    KeyboardComponent key_resp_prompt_consonants
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine prompt_vowels
    LoopInitiator trials_vowels loopType="TrialHandler"
      Selected rows = 0:4
      conditionsFile = trial_conditions_v3.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('pics', 'pics/v3.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/ih.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/v4.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/eh.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/v1.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/ae.WAV'), ('sound2', 'sound/ay.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/v2.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/iy.WAV'), ('sound2', 'sound/ey.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/c1a.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
        OrderedDict([('pics', 'pics/c1b.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')])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
      Routine blank
      Routine trial
      Routine blank
    LoopTerminator trials_vowels
    Routine prompt_consonants
    LoopInitiator trials_consonants loopType="TrialHandler"
      Selected rows = 4:24
      conditionsFile = trial_conditions_v3.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('pics', 'pics/v3.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/ih.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/v4.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/eh.wav'), ('sound2', 'blank.wav'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/v1.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/ae.WAV'), ('sound2', 'sound/ay.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/v2.png'), ('image_icon1', 'pics/speaker_icon.jpg'), ('image_icon2', 'pics/speaker_icon.jpg'), ('image_icon3', 'pics/blank.jpg'), ('sound1', 'sound/iy.WAV'), ('sound2', 'sound/ey.WAV'), ('condition', 'vowel')]),
        OrderedDict([('pics', 'pics/c1a.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')]),
        OrderedDict([('pics', 'pics/c1b.png'), ('image_icon1', 'pics/blank.jpg'), ('image_icon2', 'pics/blank.jpg'), ('image_icon3', 'pics/speaker_icon.jpg'), ('sound1', 'sound/b.WAV'), ('sound2', 'blank.wav'), ('condition', 'consonant')])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
      Routine blank
      Routine trial
      Routine blank
    LoopTerminator trials_consonants
    Routine end_of_block
  LoopTerminator block
  Routine end
