PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = present_text_on_button_press
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timeToPresent = 100  # a time after the trials ends
        flag = 0
      Each Frame:
        if key_resp.keys and flag == 0:
            timeToPresent = trialClock.getTime()
            flag = 1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Text
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.
      store = first key
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    TextComponent text_2
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = $timeToPresent
      stopVal [duration (s)] = 1.0
      text = fbText
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Flow
  Routine trial
